<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.AindManipulator;assembly=AllenNeuralDynamics.AindManipulator"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:ReadAllText" />
      </Expression>
      <Expression xsi:type="p1:DeserializeFromJson">
        <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindManipulator" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Calibration</Selector>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>ManipulatorSettings</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ManipulatorSettings</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.AindManipulator:CreateAindManipulator.bonsai">
        <OperationMode>Active</OperationMode>
        <OperationLed>On</OperationLed>
        <DumpRegisters>false</DumpRegisters>
        <VisualIndicators>On</VisualIndicators>
        <Heartbeat>Enabled</Heartbeat>
        <IgnoreErrors>false</IgnoreErrors>
        <PortName>COMx</PortName>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.AindManipulator:AindManipulatorGui.bonsai" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>