<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.LicketySplit;assembly=AllenNeuralDynamics.LicketySplit"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai">
        <RootFolder xsi:nil="true" />
        <Subject xsi:nil="true" />
        <DateTimeOffset>0001-01-01T00:00:00.0000000+00:00</DateTimeOffset>
        <SubjectName>LoggingRootPath</SubjectName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COMx</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>LicketySplitEvents</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LicketySplitEvents</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
        <DeviceMetadata xsi:nil="true" />
        <Modality>Behavior</Modality>
        <DeviceName xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LicketySplitEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:GetMetadata" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DeviceMetadata" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
        <DeviceMetadata xsi:nil="true" />
        <Modality>Behavior</Modality>
        <DeviceName xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>