<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Treadmill;assembly=AllenNeuralDynamics.Treadmill"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COMx</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:TimestampedSensorData" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Encoder</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Torque</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TorqueLoadCurrent</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>