<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Treadmill;assembly=AllenNeuralDynamics.Treadmill"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>DispatchRate</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateSensorDataDispatchRatePayload">
          <p1:SensorDataDispatchRate>200</p1:SensorDataDispatchRate>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Press "T" to Tare</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>T</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateTareSensorsPayload">
          <p1:TareSensors>Encoder Torque BreakCurrent</p1:TareSensors>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Press "R" to Reset</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>R</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateResetTareSensorsPayload">
          <p1:ResetTareSensors>Encoder Torque BreakCurrent</p1:ResetTareSensors>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>